CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)_(?P<Condition>.*)-(?P<ImageNumber>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawLipidDroplets
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:RawLipidDroplets
    Name the output image:RescaleIntensityLDs
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.01
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:RescaleIntensityLDs
    Name the objects to be identified:Cells

MaskImage:[module_num:7|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
    Select the input image:RawLipidDroplets
    Name the output image:MaskOfLDsInCells
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:MaskOfLDsInCells
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:PrimaryLDs
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0028,1.0
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
RelateObjects:[module_num:10|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
    Parent objects:Cells
    Child objects:PrimaryLDs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ChildrenLDs
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MaskOfLDsInCells
    Name the output image:LDsInCells
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:ChildrenLDs

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:LDsInCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawLipidDroplets
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|LD_AnalysisFromCellProfiler_20210124\\Images_of_identified_LDs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:MaskOfLDsInCells
    Select objects to measure:PrimaryLDs

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:PrimaryLDs
    Select neighboring objects to measure:PrimaryLDs
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:PrimaryLDs
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|LD_AnalysisFromCellProfiler_20210124
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler_HeLa-KO_NT_M_
    Overwrite existing files without warning?:No
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