CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:43
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>.*)-(?P<Date>[0-9]{8})_(?P<Condition>.*) - (?P<ImageName>.*)-(?P<ImageNumber>[0-9].*)....
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:LDs
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:MOSPD2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:ER
    Name the output image:Rescaled_Intensity_ER
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.3
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:Rescaled_Intensity_ER
    Name the objects to be identified:Cells

IdentifyObjectsManually:[module_num:7|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
    Select the input image:ER
    Name the objects to be identified:Nuclei

MaskImage:[module_num:8|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
    Select the input image:ER
    Name the output image:MaskOfER_WholeCell
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:MaskOfER_WholeCell
    Name the output image:MaskofER_CellMinusNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:10|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
    Select the input image:MOSPD2
    Name the output image:MaskOfGreenProtein_WholeCell
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:11|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
    Select the input image:MaskOfGreenProtein_WholeCell
    Name the output image:MaskofEGreenProtein_CellMinusNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:12|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
    Select the input image:LDs
    Name the output image:LDs_in_cell
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:LDs_in_cell
    Name the output image:LD_EnhanceFeatures
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:LD_EnhanceFeatures
    Name the primary objects to be identified:LD_objects
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:15|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
    Parent objects:Cells
    Child objects:LD_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:LDs_perCell
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LD_EnhanceFeatures
    Name the output image:LDs_Outlined
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FEFE01
    Select objects to display:LD_objects

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:LDs_Outlined
    Select method for constructing file names:From image filename
    Select image name for file prefix:LDs
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|ER_Quantif\\Identified_LDs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_2px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:2
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_4px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:4
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:20|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_6px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:6
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:21|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_8px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:8
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:22|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_10px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:23|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_12px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:24|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_14px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:14
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:25|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_16px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:16
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:26|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_18px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:18
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:27|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
    Select the input objects:LD_objects
    Name the objects to be identified:LD_objects_expanded_20px
    Select the method to identify the secondary objects:Distance - N
    Select the input image:LD_EnhanceFeatures
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:28|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notes:['bande de 5 px autour des LDs']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
    Select the larger identified objects:LD_objects_expanded_2px
    Select the smaller identified objects:LD_objects
    Name the tertiary objects to be identified:PeriLDs_0to2px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:29|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notes:['bande de 5-10 px autour des LDs']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
    Select the larger identified objects:LD_objects_expanded_4px
    Select the smaller identified objects:LD_objects_expanded_2px
    Name the tertiary objects to be identified:PeriLDs_2to4px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:30|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
    Select the larger identified objects:LD_objects_expanded_6px
    Select the smaller identified objects:LD_objects_expanded_4px
    Name the tertiary objects to be identified:PeriLDs_4to6px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:31|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
    Select the larger identified objects:LD_objects_expanded_8px
    Select the smaller identified objects:LD_objects_expanded_6px
    Name the tertiary objects to be identified:PeriLDs_6to8px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:32|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
    Select the larger identified objects:LD_objects_expanded_10px
    Select the smaller identified objects:LD_objects_expanded_8px
    Name the tertiary objects to be identified:PeriLDs_8to10px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:33|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
    Select the larger identified objects:LD_objects_expanded_12px
    Select the smaller identified objects:LD_objects_expanded_10px
    Name the tertiary objects to be identified:PeriLDs_10to12px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:34|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
    Select the larger identified objects:LD_objects_expanded_14px
    Select the smaller identified objects:LD_objects_expanded_12px
    Name the tertiary objects to be identified:PeriLDs_12to14px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:35|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
    Select the larger identified objects:LD_objects_expanded_16px
    Select the smaller identified objects:LD_objects_expanded_14px
    Name the tertiary objects to be identified:PeriLDs_14to16px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:36|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
    Select the larger identified objects:LD_objects_expanded_18px
    Select the smaller identified objects:LD_objects_expanded_16px
    Name the tertiary objects to be identified:PeriLDs_16to18px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:37|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
    Select the larger identified objects:LD_objects_expanded_20px
    Select the smaller identified objects:LD_objects_expanded_18px
    Name the tertiary objects to be identified:PeriLDs_18to20px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:38|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
    Select the larger identified objects:LD_objects_expanded_4px
    Select the smaller identified objects:LD_objects
    Name the tertiary objects to be identified:PeriLDs_0to4px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:39|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
    Select the larger identified objects:LD_objects_expanded_20px
    Select the smaller identified objects:LD_objects_expanded_10px
    Name the tertiary objects to be identified:PeriLDs_10to20px
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:40|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:LD_objects_expanded_2px
    Name the tertiary objects to be identified:CytoplasmWithoutPeriLDs_2px
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:41|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
    Select images to measure:LDs_in_cell, MaskofEGreenProtein_CellMinusNuclei, MaskofER_CellMinusNuclei
    Select objects to measure:Cells, CytoplasmWithoutPeriLDs_2px, PeriLDs_0to2px, PeriLDs_0to4px, PeriLDs_10to12px, PeriLDs_10to20px, PeriLDs_12to14px, PeriLDs_14to16px, PeriLDs_16to18px, PeriLDs_18to20px, PeriLDs_2to4px, PeriLDs_4to6px, PeriLDs_6to8px, PeriLDs_8to10px

MeasureImageIntensity:[module_num:42|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
    Select images to measure:MaskofEGreenProtein_CellMinusNuclei, MaskofER_CellMinusNuclei
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells, CytoplasmWithoutPeriLDs_2px, PeriLDs_0to2px, PeriLDs_0to4px, PeriLDs_10to12px, PeriLDs_10to20px, PeriLDs_12to14px, PeriLDs_14to16px, PeriLDs_16to18px, PeriLDs_18to20px, PeriLDs_2to4px, PeriLDs_4to6px, PeriLDs_6to8px, PeriLDs_8to10px
    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:43|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|ER_Quantif
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:VAPA_N4_
    Overwrite existing files without warning?:No
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